PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant': '', 'Expra Code': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1680, 1050]
  expName = MemLear_ses-01_part-02_label-phase2
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Routines
  Routine trial
  Routine initialise
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        cond_file =  'select_list'+( str((int(expInfo['participant']) % 4) + 1)) +'.csv'
        print(cond_file)
        print("we are here")
  Routine Instructions
    TextComponent InstTop
      color = black
      font = bold
      letterHeight = 0.05
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $text1
      wrapWidth = 1.5
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    TextComponent InstMiddle
      color = black
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $text2
      wrapWidth = 1.5
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    TextComponent InstrBottom
      color = black
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $text3
      wrapWidth = 1.5
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    KeyboardComponent Inst_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine preTask
    TextComponent PretaskInstr_2
      color = Black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In this task there is no time limit, so please take your time to make your decision.

        However, please do not take random breaks!

        After completing half of the task, you will be given the possibility to take a break. So please wait for the message.

        Please press SPACE when you are read to start with the task!
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fixcross
    TextComponent fix
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine identity
    ImageComponent object_id
      image [set every repeat] = $images
      pos = (0, 0.2)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent prompt_id
      color = black
      letterHeight = 0.05
      pos = (0, -0.12)
      startVal [time (s)] = 0.0
      text = Have you seen this object before?
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    TextComponent prompt_id2
      color = black
      letterHeight = 0.1
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = YES               NO
      wrapWidth = 1.5
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    KeyboardComponent recog_resp
      allowedKeys = 'left','right'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine ident_feedb
    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        assoc=[]
      Begin Experiment:
        x_square=None
      Begin Routine:
        if recog_resp.keys=="right":
            x_square=0.3
            assoc=0
        else:
            x_square=-0.3
            assoc=1
      End Routine:
        x_square=None
    ImageComponent feedb_objectID
      image [set every repeat] = $images
      pos = (0, 0.2)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    PolygonComponent identity_fedb
      fillColor = $[0,0,0]
      lineWidth = 5
      pos [set every repeat] = [x_square,-0.3]
      saveStartStop = False
      shape = rectangle
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent feedb_id
      color = black
      letterHeight = 0.1
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = YES               NO
      wrapWidth = 1.5
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    TextComponent feedb_idPrompt
      color = black
      font = arial
      letterHeight = 0.05
      pos = (0, -0.12)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = Have you seen this object before?
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  Routine confidence
    KeyboardComponent conf_resp
      allowedKeys = '1', '2', '3', '4'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    ImageComponent object_id2
      image [set every repeat] = $images
      pos = (0, 0.2)
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent conf_choice
      color = black
      disabled = True
      letterHeight = 0.07
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      units = height
      wrapWidth = 2
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      text:
          1              2         3            4
        very unsure   unsure    sure   very sure
    TextComponent conf_choiceprompt
      color = black
      letterHeight = 0.05
      pos = (0, -0.12)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = How sure are you of your response?
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    ImageComponent image
      image = mem_optionsENG.png
      pos = (0, -0.35)
      saveStartStop = False
      size = (1.3, 0.4)
      startVal [time (s)] = 0.0
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  Routine confid_feedback
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        if conf_resp.keys=="1":
            imagfeedb="mem_optionsENG1.png"
        elif conf_resp.keys=="2":
            imagfeedb="mem_optionsENG2.png"
        elif conf_resp.keys=="3":
            imagfeedb="mem_optionsENG3.png"
        elif conf_resp.keys=="4":
            imagfeedb="mem_optionsENG4.png"
      End Routine:
        x_square=None
    ImageComponent object_id3
      image [set every repeat] = $images
      pos = (0, 0.2)
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    ImageComponent image_2
      image [set every repeat] = $imagfeedb
      pos = (0, -0.35)
      size = (1.3, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent conf_choicefeed
      color = black
      disabled = True
      letterHeight = 0.07
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      wrapWidth = 1.5
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      text:
          1              2         3            4
        very unsure   unsure    sure   very sure
    TextComponent conf_choicefeedbprompt
      color = black
      font = arial
      letterHeight = 0.05
      pos = (0, -0.12)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = How sure are you of your response?
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  Routine break_2
    TextComponent text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg
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    KeyboardComponent key_resp_break
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Experiment:
        msg= "You completed half of this last task!You can take a break now if you want. Please press SPACE to continue"
        loopn=1
      Begin Routine:
        loopn=loopn+1
        if loopn==2:
            msg="Thank you for completing the task! Please do not close the browser window until data has finished loading. Press SPACE to continue"

        print(loopn)
      End Routine:
        trialn=2
  Routine instr_nback
    TextComponent instr_nBack
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Now we would like you to work on a slightly different task.

        A series of words will be presented on the screen.

        Your task is to press the D button for YES
        when the word you are currently seeing is the same as the word that you have seen two trials earlier.

        If this is not the case, press the L button for NO.

        Press SPACE to see an illustration of the task.
    KeyboardComponent istr_nback
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine illustration
    ImageComponent image_3
      image [set every repeat] = $images
      saveStartStop = False
      size = (1.8,1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = 'space', 'd', 'l'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine nBack_intro
    TextComponent text_2
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You will now engage in the task.

        Please place your left finger on the D button and the right finger on the L button.


        Press SPACE to continue.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine nBack_task
    TextComponent nBack_task_pres
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $word
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    TextComponent blank
      letterHeight = 0.1
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 0.2
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    KeyboardComponent key_resp_4
      allowedKeys = 'l', 'd'
      correctAns = $CORRanswer
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.7
      store = all keys
      storeCorrect = True
      syncScreenRefresh = False
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  Routine end_nback
    TextComponent text_3
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Thank you for completing this task!

        Please return to the experimenter.

        Press SPACE to continue
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine initialise
  Routine instr_nback
  LoopInitiator illustration_loop loopType="TrialHandler"
    conditionsFile = illustrations.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('images', 'slide 1.jpg'), ('key', 'space')]),
      OrderedDict([('images', 'slide 2.jpg'), ('key', 'l')]),
      OrderedDict([('images', 'slide 3.jpg'), ('key', 'l')]),
      OrderedDict([('images', 'slide 4.jpg'), ('key', 'l')]),
      OrderedDict([('images', 'slide 5.jpg'), ('key', 'd')]),
      OrderedDict([('images', 'slide 6.jpg'), ('key', 'l')]),
      OrderedDict([('images', 'slide 7.jpg'), ('key', 'space')])]
    Routine illustration
  LoopTerminator illustration_loop
  Routine nBack_intro
  LoopInitiator nback_loop loopType="TrialHandler"
    conditionsFile = nBack_list.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('word', 'bless'), ('CORRanswer', 'l'), ('trialtype', 0), ('Hit_NoHit', 'NoHit')]),
      OrderedDict([('word', 'nature'), ('CORRanswer', 'l'), ('trialtype', 0), ('Hit_NoHit', 'NoHit')]),
      OrderedDict([('word', 'carefree'), ('CORRanswer', 'l'), ('trialtype', 0), ('Hit_NoHit', 'NoHit')]),
      OrderedDict([('word', 'nature'), ('CORRanswer', 'd'), ('trialtype', 1), ('Hit_NoHit', 'Hit')]),
      OrderedDict([('word', 'easygoing'), ('CORRanswer', 'l'), ('trialtype', 0), ('Hit_NoHit', 'NoHit')]),
      OrderedDict([('word', 'pillow'), ('CORRanswer', 'l'), ('trialtype', 0), ('Hit_NoHit', 'NoHit')]),
      OrderedDict([('word', 'easygoing'), ('CORRanswer', 'd'), ('trialtype', 1), ('Hit_NoHit', 'Hit')]),
      OrderedDict([('word', 'gentle'), ('CORRanswer', 'l'), ('trialtype', 0), ('Hit_NoHit', 'NoHit')]),
      OrderedDict([('word', 'square'), ('CORRanswer', 'l'), ('trialtype', 0), ('Hit_NoHit', 'NoHit')]),
      OrderedDict([('word', 'gentle'), ('CORRanswer', 'd'), ('trialtype', 1), ('Hit_NoHit', 'Hit')]),
      OrderedDict([('word', 'carefree'), ('CORRanswer', 'l'), ('trialtype', 0), ('Hit_NoHit', 'NoHit')]),
      OrderedDict([('word', 'tool'), ('CORRanswer', 'l'), ('trialtype', 0), ('Hit_NoHit', 'NoHit')]),
      OrderedDict([('word', 'bored'), ('CORRanswer', 'l'), ('trialtype', 0), ('Hit_NoHit', 'NoHit')]),
      OrderedDict([('word', 'tool'), ('CORRanswer', 'd'), ('trialtype', 1), ('Hit_NoHit', 'Hit')]),
      OrderedDict([('word', 'home'), ('CORRanswer', 'l'), ('trialtype', 0), ('Hit_NoHit', 'NoHit')])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
    Routine nBack_task
  LoopTerminator nback_loop
  Routine end_nback
  LoopInitiator instructions_loop loopType="TrialHandler"
    conditionsFile = InstructionsPhase3.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('text1', 'You make it to the last phase of this experiment!'), ('text2', '.'), ('text3', 'Please press the space bar to continue')]),
      OrderedDict([('text1', '.'), ('text2', 'In this phase, you will see some objects. \n\nFor each object, you should indicate whether you have seen it before during the experiment.\n\nPress LEFT ARROW for YES\nPress RIGHT ARROW for NO\n\n'), ('text3', 'Please press the space bar to continue ')]),
      OrderedDict([('text1', '.'), ('text2', 'After that, you will be asked how confident you are of your choice.\n\nPlease rate the confidence in your choice with the numbers from 1 to 4 of your keyboard. \n\nThe numbers correspond to:\n\n1 = Very unsure\n2 = Unsure\n3 = Sure\n4 = Very Sure'), ('text3', 'Please press the space bar to continue')])]
    Routine Instructions
  LoopTerminator instructions_loop
  Routine preTask
  LoopInitiator list_loop loopType="TrialHandler"
    conditionsFile = $cond_file
    isTrials = False
    loopType = sequential
    nReps = 1
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    LoopInitiator recog_loop loopType="TrialHandler"
      conditionsFile = $recog_list
      isTrials = False
      loopType = random
      nReps = 1
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      Routine fixcross
      Routine identity
      Routine ident_feedb
      Routine confidence
      Routine confid_feedback
    LoopTerminator recog_loop
    Routine break_2
  LoopTerminator list_loop
